PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = CogExperiment_Audio
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent setup
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the task!

        You will  hear beeps.
        Estimate how many there were.
        Then rate your confidence and make a decision.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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  Routine stimuli
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    SoundComponent audio
      forceEndRoutine = False
      sound [set every repeat] = $audio_file
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        print("Trial sound file:", audio_file)
  Routine estimate
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    TextboxComponent type_box
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Enter how many beeps you heard
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    MouseComponent mouse
      clickable = "next_btn"
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ButtonComponent next_btn
      bold = True
      fillColor = $(0.0902, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent code_1
      Code Type = Py
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      Begin Routine:
        mouse.clickReset()
        type_box.text = ""
      Each Frame:
        # Only proceed if NEXT was clicked
        if mouse.isPressedIn(next_btn):
            if type_box.text.strip() != "":
                continueRoutine = False
      End Routine:
        thisExp.addData("estimate_raw", type_box.text)
  Routine confidence
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    SliderComponent slider
      color = $(1.0000, 1.0000, 1.0000)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not confident ", "Slightly",  "Moderate",  "Confident",  "Very confident"]
      letterHeight = 0.05
      size = (1.2, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent rating
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        How confident are you in your previous answer?

        Choose a rating and click continue
    MouseComponent mouse_2
      clickable = "confi_btn"
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ButtonComponent confi_btn
      bold = True
      fillColor = $(0.0902, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        mouse_2.clickReset()
      Each Frame:
        # Only allow continue if rating exists AND confirm clicked
        if mouse_2.isPressedIn(confi_btn):
            if slider.getRating() is not None:
                 continueRoutine = False
      End Routine:
        conf_rating = slider.getRating()
        thisExp.addData("confidence", conf_rating)
  Routine decision
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        total_points = 0
      End Routine:
        # -----------------------------
        earned_points = 0
        correct_response = 0
        choice_text = None
        # -----------------------------
        # 2. Convert inputs safely
        # -----------------------------
        try:
            estimate_value = float(type_box.text)
        except:
            estimate_value = None

        try:
            true_val = float(true_value)
        except:
            true_val = None

        try:
            thresh = float(threshold)
        except:
            thresh = None

        # -----------------------------
        # 3. Accuracy check
        # -----------------------------
        abs_error = None
        correct_response = 0

        if estimate_value is not None:
            abs_error = abs(estimate_value - true_val)

            if abs_error <= thresh:
                correct_response = 1


        # -----------------------------
        # 4. Capture choice (this trial only)
        # -----------------------------
        if mouse_3.clicked_name:
            choice_text = mouse_3.clicked_name[0]

        # -----------------------------
        # 5. Points logic (explicit tree)
        # -----------------------------
        if correct_response == 1:
            if choice_text == "risky":
                earned_points = 80
            elif choice_text == "safe":
                earned_points = 20

        # -----------------------------
        # 6. Running total (safe)
        # -----------------------------
        total_points += earned_points

        # -----------------------------
        # 7. Debug (before save)
        # -----------------------------
        print("DEBUG TRUE:", true_value, type(true_value))
        print("DEBUG THRESH:", threshold, type(threshold))
        print("DEBUG EST:", estimate_value, type(estimate_value))
        print("DEBUG ERR:", abs_error, type(abs_error))
        print("DEBUG POINT:", earned_points, type(earned_points))

        # -----------------------------
        # 8. Save data
        # -----------------------------
        thisExp.addData("choice_text", choice_text)
        thisExp.addData("estimate_value", estimate_value)
        thisExp.addData("estimate_error", abs_error )
        thisExp.addData("true_value", true_value)
        thisExp.addData("threshold", threshold)
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("earned_points", earned_points)
        thisExp.addData("total_points", total_points)
    TextComponent text_choice
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Make a final decision by clicking one choice
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    TextComponent safe
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Safe choice (20 points)
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    TextComponent risky
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Risky choice (80 or 0 points)
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    MouseComponent mouse_3
      clickable = "safe","risky"
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.2
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  Routine Final_feed
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    TextComponent checkpoint
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent final_code
      Code Type = Py
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      Begin Routine:
        # Display total points
        checkpoint.text = ("Thank you for participating\n\n"
                           "Your final score was:" + str(total_points))
        print(total_points)
      End Routine:
        print("FINAL TOTAL:", total_points)
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio_condition.xlsx
    loopType = sequential
    nReps = 1
    random seed = 1234
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    conditions:
      [{'difficulty': 'easy', 'audio_file': 'stimuli/A5.wav', 'true_value': 5, 'threshold': 2},
      {'difficulty': 'hard', 'audio_file': 'stimuli/A9.wav', 'true_value': 9, 'threshold': 2},
      {'difficulty': 'easy', 'audio_file': 'stimuli/A6.wav', 'true_value': 6, 'threshold': 2},
      {'difficulty': 'hard', 'audio_file': 'stimuli/A10.wav', 'true_value': 10, 'threshold': 2}]
    Routine stimuli
    Routine estimate
    Routine confidence
    Routine decision
  LoopTerminator trials
  Routine Final_feed
