PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = CogExperiment_Visual
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine stimuli
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    ImageComponent stim_visual
      color = $[1,1]
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instruct
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    TextComponent start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see a number of dots briefly on the screen

        You will need to estimate how many dots appeared

        Then rate your confidence and make a decision

        Press SPACE to begin
    KeyboardComponent start_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        +
  Routine estimate
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    TextboxComponent type_box
      bold = False
      color = $(-1.0000, -1.0000, -1.0000)
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = "next_btn"
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable [set every repeat] = name
      startVal [time (s)] = 0.0
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    CodeComponent btn_logic
      Code Type = Py
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      Begin Experiment:
        total_points = 0
      Begin Routine:
        mouse.clickReset()
        type_box.text = ""
      Each Frame:
        # Only allow continue if estimate box is not empty
        # Only proceed if NEXT was clicked
        if mouse.isPressedIn(next_btn):
            if type_box.text.strip() != "":
                continueRoutine = False
            else:
                error_text.text = "Please enter a value"
      End Routine:
        thisExp.addData("estimate_raw", type_box.text)
    ButtonComponent next_btn
      bold = True
      fillColor = $(0.0902, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Continue
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    TextComponent number_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Enter your estimate (number of dots) :
  Routine decision
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        #Reset Trial State
        choice_text = None
      End Routine:
        # -----------------------------
        # 1. Defaults (hard reset)
        # -----------------------------
        earned_points = 0
        correct_response = 0
        choice_text = None

        # -----------------------------
        # 2. Convert inputs safely
        # -----------------------------
        try:
            estimate_value = float(type_box.text)
        except:
            estimate_value = None

        try:
            true_val = float(true_value)
        except:
            true_val = None

        try:
            thresh = float(threshold)
        except:
            thresh = None

        # -----------------------------
        # 3. Accuracy check
        # -----------------------------
        if estimate_value is not None and true_val is not None and thresh is not None:
            if abs(estimate_value - true_val) <= thresh:
               correct_response = 1

        # -----------------------------
        # 4. Capture choice (this trial only)
        # -----------------------------
        if mouse_3.clicked_name:
            choice_text = mouse_3.clicked_name[0]

        # -----------------------------
        # 5. Points logic (explicit tree)
        # -----------------------------
        if correct_response == 1:
            if choice_text == "risk":
                earned_points = 80
            elif choice_text == "safe":
                earned_points = 20

        # -----------------------------
        # 6. Running total (safe)
        # -----------------------------
        total_points += earned_points

        # -----------------------------
        # 7. Debug (before save)
        # -----------------------------
        print("DEBUG TRUE:", true_value, type(true_value))
        print("DEBUG THRESH:", threshold, type(threshold))
        print("DEBUG EST:", estimate_value, type(estimate_value))
        print("DEBUG POINT:", earned_points, type(earned_points))

        # -----------------------------
        # 8. Save data
        # -----------------------------
        thisExp.addData("choice_text", choice_text)
        thisExp.addData("estimate_value", estimate_value)
        thisExp.addData("true_value", true_value)
        thisExp.addData("threshold", threshold)
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("earned_points", earned_points)
        thisExp.addData("total_points", total_points)
    MouseComponent mouse_3
      clickable = "risk","safe"
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.2
      syncScreenRefresh = True
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    TextComponent safe
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Safe choice (20 points)
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    TextComponent risk
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Risk choice (80 or 0 points)
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    TextComponent decison
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Make a decision by clicking your choice
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  Routine confidence
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    SliderComponent slider
      color = $(1.0000, 1.0000, 1.0000)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not confident ","Slightly","Moderate","Confident", "Very confident"]
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.2, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1,    2,     3,    4,    5)
      units = height
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    TextComponent text_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        How confident are you in your estimate


        Click a rating and press the continue button
    MouseComponent mouse_2
      clickable = "confi_btn"
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        mouse_2.clickReset()
      Each Frame:
        # Only allow continue if rating exists AND confirm clicked
        if mouse_2.isPressedIn(confi_btn):
            if slider.getRating() is not None:
               continueRoutine = False
      End Routine:
        conf_rating = slider.getRating()
        thisExp.addData("confidence", conf_rating)
    ButtonComponent confi_btn
      bold = True
      fillColor = $(0.0902, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Continue
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  Routine final
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    TextComponent final_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        # Display total points
        final_text.text = ("Thank you for participating\n\n"
                           "Your final score was:" + str(total_points))
        print(total_points)
      End Routine:
        print("FINAL TOTAL:", total_points)
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = visual_condition.xlsx
    loopType = sequential
    nReps = 1
    random seed = 12345
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    conditions:
      [{'Difficulty': 'easy', 'image_file': 'stimuli/N5.png', 'true_value': 5, 'threshold': 2},
      {'Difficulty': 'hard', 'image_file': 'stimuli/N9.png', 'true_value': 9, 'threshold': 2},
      {'Difficulty': 'easy', 'image_file': 'stimuli/N6.png', 'true_value': 6, 'threshold': 2},
      {'Difficulty': 'hard', 'image_file': 'stimuli/N10.png', 'true_value': 10, 'threshold': 2}]
    Routine fixation
    Routine stimuli
    Routine estimate
    Routine confidence
    Routine decision
  LoopTerminator trials
  Routine final
